PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = acceptability-judgment-simple
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    SliderComponent rating
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (1, 2, 3, 4, 5)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sentence': "Here's an acceptable sentence."},
      {'sentence': "Here's an unacceptable sentences."},
      {'sentence': 'Brandon love linguistics. '},
      {'sentence': 'Stan loves linguistics.'}]
    Routine trial
  LoopTerminator trials
