PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['groupB.xlsx', 'groupA.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = acceptability-judgment-advanced
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent conditionAssignment
      Code Type = Both
      Begin Experiment:
        import random
        condition = random.choice(['A', 'B'])
        conditionsFile = f'group{condition}.xlsx'
      Begin JS Experiment:
        var condition = Math.random() < 0.5 ? 'A' : 'B';
        conditionsFile = 'group' + condition + '.xlsx'
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    CodeComponent disableSpaceScroll
      Code Type = JS
      Begin JS Experiment:
        function disableSpacebarScroll(e) {
            // Key code 32 is the spacebar
            // e.target == document.body ensures it only affects the main page, not text inputs
            if (e.keyCode === 32 && e.target === document.body) {
                e.preventDefault();
            }
        }

        // Add the event listener when the experiment starts or a routine begins
        window.addEventListener('keydown', disableSpacebarScroll);
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    TextboxComponent errorBox
      bold = False
      color = 0.3961, -0.7333, -0.7333
      editable = False
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ("1\ntotally\nunacceptable", 2, 3, 4, "5\nperfectly\nacceptable")
      letterHeight = 0.05
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent registerResponse
      Code Type = Both
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        error = false;
      Begin Routine:
        event.clearEvents() # Because 'space' press from instructions might be in getKeys()
        error = False
      Each Frame:
        if 'space' in event.getKeys():
            if slider.getRating():
                error = False
                continueRoutine = False
            else:
                error = True
                continueRoutine = True
        elif slider.getRating():
            error = False

        if error:
            errorBox.text = "Please make a selection before proceeding."
        else:
            errorBox.text = ""
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6("space", psychoJS.eventManager.getKeys())) {
            if (slider.getRating()) {
                error = false;
                continueRoutine = false;
            } else {
                error = true;
                continueRoutine = true;
            }
        } else {
            if (slider.getRating()) {
                error = false;
            }
        }
        if (error) {
            errorBox.text = "Please make a selection before proceeding.";
        } else {
            errorBox.text = "";
        }
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Here are some instructions.

        Press the space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditionsFile
    loopType = random
    nReps = 1
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    conditions:
      [{'sentence': 'I like movies at all.', 'id': 1, 'condition': 'pos'},
      {'sentence': "I don't like movies at all.", 'id': 1, 'condition': 'neg'},
      {'sentence': 'I like Italian food at all.', 'id': 2, 'condition': 'pos'},
      {'sentence': "I don't like Italian food at all.", 'id': 2, 'condition': 'neg'}]
    Routine trial
  LoopTerminator trials
